PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'../data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = hcp_social-animation-fmri
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now watch short clips and decide if the shapes are having a mental interaction or not.

        For a mental interaction, press the button under your index finger. If you are not sure, press the button under your middle finger. For a random interaction, press the button under your ring finger.

        After each clip, there will be a response slide. Please respond while that slide is on the screen.
    KeyboardComponent start_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_task
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    TextComponent end_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participanting. You may press the space bar to end the task. 
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    KeyboardComponent end_task_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_run
    RoutineSettingsComponent end_run
      skipIf = $run == 2
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    TextComponent end_run_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please take a break. When you are ready to start the next round, press the space bar. 
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    KeyboardComponent end_run_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resp_phase
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    TextComponent resp_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Social         Unsure         Non-social
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    KeyboardComponent resp_key
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine video_phase
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    MovieComponent video_stim
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimuli
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine fixation_phase
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine scanner_trigger
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    SerialOutComponent serialPort
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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Flow
  Routine intro
  LoopInitiator task_run loopType="TrialHandler"
    conditionsFile = ../stimuli/stimuli_order.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('runFile', '../stimuli/stimuli_order_run1.csv'), ('readyMsg', 'Run 1')]),
      OrderedDict([('runFile', '../stimuli/stimuli_order_run2.csv'), ('readyMsg', 'Run 2')])]
    Routine scanner_trigger
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $runFile
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('run', 1), ('stimuli', '../stimuli/COAXING-B.AVI'), ('category', 'mental')]),
        OrderedDict([('run', 1), ('stimuli', '../stimuli/BILLIARD-A.AVI'), ('category', 'random')]),
        OrderedDict([('run', 1), ('stimuli', '../stimuli/DRIFTING-A.AVI'), ('category', 'random')]),
        OrderedDict([('run', 1), ('stimuli', '../stimuli/FISHING.AVI'), ('category', 'random')]),
        OrderedDict([('run', 1), ('stimuli', '../stimuli/RANDOM MECHANICAL.AVI'), ('category', 'mental')]),
        OrderedDict([('run', 2), ('stimuli', '../stimuli/SCARING.AVI'), ('category', 'mental')]),
        OrderedDict([('run', 2), ('stimuli', '../stimuli/SEDUCING-B.AVI'), ('category', 'mental')]),
        OrderedDict([('run', 2), ('stimuli', '../stimuli/STAR-A.AVI'), ('category', 'random')]),
        OrderedDict([('run', 2), ('stimuli', '../stimuli/SURPRISING-B.AVI'), ('category', 'mental')]),
        OrderedDict([('run', 2), ('stimuli', '../stimuli/TENNIS-A.AVI'), ('category', 'random')])]
      Routine video_phase
      Routine resp_phase
      Routine fixation_phase
    LoopTerminator trials
    Routine end_run
  LoopTerminator task_run
  Routine end_task
